PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Estimulo_ICE
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    ImageComponent image
      image = gaborVert.png
      interpolate = nearest
      pos [set every repeat] = (px1, py1)
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = cm
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    ImageComponent image_2
      image = gaborVert.png
      interpolate = nearest
      pos [set every repeat] = (px2, py2)
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = cm
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    PolygonComponent polygon
      fillColor = -1.0000, 1.0000, -0.0039
      lineColor = -1.0000, 1.0000, -0.0039
      shape = circle
      size = (0.005, 0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    KeyboardComponent key_resp_2
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      store = all keys
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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      text [set every frame]:
        $key_resp_2.keys
    CodeComponent code_3
      Code Type = Auto->JS
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      Each Frame:
        if key_resp_2.keys:
            dados.extend(zip(key_resp_2.keys, [globalClock.getTime()] * len(key_resp_2.keys)))
  Routine trial_2
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    ImageComponent image_3
      image = gaborVert.png
      interpolate = nearest
      pos [set every repeat] = (px3, py3)
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = cm
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    ImageComponent image_4
      image = gaborVert.png
      interpolate = nearest
      pos [set every repeat] = (px4,py4)
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = cm
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    PolygonComponent polygon_2
      fillColor = -1.0000, 1.0000, -0.0039
      lineColor = -1.0000, 1.0000, -0.0039
      shape = circle
      size = (0.005, 0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    KeyboardComponent key_resp_3
      allowedKeys = 'up','right'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      store = all keys
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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      text [set every frame]:
        $key_resp_3.keys
    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        if key_resp_3.keys:
            dados.extend(zip(key_resp_3.keys, [globalClock.getTime()] * len(key_resp_3.keys)))
  Routine trial_3
    RoutineSettingsComponent trial_3
      stopVal [duration (s)] = 0.3
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    ImageComponent image_5
      image = gaborHoriz.png
      interpolate = nearest
      pos [set every repeat] = (px1, py1)
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = cm
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    ImageComponent image_6
      flipVert = True
      image = gaborHoriz.png
      interpolate = nearest
      pos [set every repeat] = (px2, py2)
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = cm
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    PolygonComponent polygon_3
      fillColor = -1.0000, 1.0000, -0.0039
      lineColor = -1.0000, 1.0000, -0.0039
      shape = circle
      size = (0.005, 0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    KeyboardComponent key_resp_4
      allowedKeys = 'up','right'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      store = all keys
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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      text [set every frame]:
        $key_resp_4.keys
    CodeComponent code_5
      Code Type = Auto->JS
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      Each Frame:
        if key_resp_4.keys:
            dados.extend(zip(key_resp_4.keys, [globalClock.getTime()] * len(key_resp_4.keys)))
  Routine trial_4
    RoutineSettingsComponent trial_4
      stopVal [duration (s)] = 0.3
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    ImageComponent image_7
      image = gaborHoriz.png
      interpolate = nearest
      pos [set every repeat] = (px3, py3)
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = cm
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    ImageComponent image_8
      image = gaborHoriz.png
      interpolate = nearest
      pos [set every repeat] = (px4, py4)
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = cm
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    PolygonComponent polygon_4
      fillColor = -1.0000, 1.0000, -0.0039
      lineColor = -1.0000, 1.0000, -0.0039
      shape = circle
      size = (0.005, 0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    KeyboardComponent key_resp_5
      allowedKeys = 'up','right'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      store = all keys
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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      text [set every frame]:
        $key_resp_5.keys
    CodeComponent code_6
      Code Type = Auto->JS
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      Each Frame:
        if key_resp_5.keys:
            dados.extend(zip(key_resp_5.keys, [globalClock.getTime()] * len(key_resp_5.keys)))
  Routine trial_5
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    ImageComponent image_9
      image = controle.jpeg
      interpolate = nearest
      pos [set every repeat] = (px1, py1)
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = cm
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    PolygonComponent polygon_6
      fillColor = -1.0000, 1.0000, -0.0039
      lineColor = -1.0000, 1.0000, -0.0039
      shape = circle
      size = (0.005, 0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent image_10
      flipVert = True
      image = controle.jpeg
      interpolate = nearest
      pos [set every repeat] = (px2, py2)
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = cm
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    KeyboardComponent key_resp_6
      allowedKeys = 'up','right'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      store = all keys
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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      text [set every frame]:
        $key_resp_6.keys
    CodeComponent code_7
      Code Type = Auto->JS
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      Each Frame:
        if key_resp_6.keys:
            dados.extend(zip(key_resp_6.keys, [globalClock.getTime()] * len(key_resp_6.keys)))
  Routine trial_6
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    ImageComponent image_11
      image = controle.jpeg
      interpolate = nearest
      pos [set every repeat] = (px3, py3)
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = cm
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    ImageComponent image_12
      image = controle.jpeg
      interpolate = nearest
      pos [set every repeat] = (px4, py4)
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = cm
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    PolygonComponent polygon_7
      fillColor = -1.0000, 1.0000, -0.0039
      lineColor = -1.0000, 1.0000, -0.0039
      shape = circle
      size = (0.005, 0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    KeyboardComponent key_resp_7
      allowedKeys = 'up','right'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      store = all keys
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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      text [set every frame]:
        $key_resp_7.keys
    CodeComponent code_8
      Code Type = Auto->JS
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      Each Frame:
        if key_resp_7.keys:
            dados.extend(zip(key_resp_7.keys, [globalClock.getTime()] * len(key_resp_7.keys)))
  Routine _intertrial_interval_
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    PolygonComponent polygon_5
      fillColor = red
      lineColor = red
      shape = circle
      size = (0.005, 0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine codigo
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        dados = []
      Begin Experiment:
        filename = "respostas_experimento.csv"

        # Criar o arquivo CSV e escrever o cabeçalho
        with open(filename, "w") as file:
            file.write("Loop,Tempo_Inicio,Tecla,Tempo_Pressao\n")

        dados = []  # Lista para armazenar os dados temporariamente
      Begin Routine:
        loop_start_time = core.getTime()  # Registra o tempo do início da repetição
      Each Frame:
        if key_resp_2.keys == 'right' or key_resp_3.keys == 'right' or key_resp_4.keys == 'right' or key_resp_5.keys == 'right' or key_resp_6.keys == 'right' or key_resp_7.keys == 'right':  # key_resp_2 para o Estímulo 1
            print('right')

        if LoopName == 'Estimulo_1':
            rep1 = 1
            rep2 = 0
            rep3 = 0
            rep4 = 0
            rep5 = 0
            rep6 = 0
            rep7 = 0
            rep8 = 0
            rep9 = 0
            rep10 = 0
            rep11 = 0
            rep12 = 0


        elif LoopName == 'Estimulo_2':
            rep1 = 0
            rep2 = 1
            rep3 = 0
            rep4 = 0
            rep5 = 0
            rep6 = 0
            rep7 = 0
            rep8 = 0
            rep9 = 0
            rep10 = 0
            rep11 = 0
            rep12 = 0


        elif LoopName == 'Estimulo_3':
            rep1 = 0
            rep2 = 0
            rep3 = 1
            rep4 = 0
            rep5 = 0
            rep6 = 0
            rep7 = 0
            rep8 = 0
            rep9 = 0
            rep10 = 0
            rep11 = 0
            rep12 = 0


        elif LoopName == 'Estimulo_4':
            rep1 = 0
            rep2 = 0
            rep3 = 0
            rep4 = 1
            rep5 = 0
            rep6 = 0
            rep7 = 0
            rep8 = 0
            rep9 = 0
            rep10 = 0
            rep11 = 0
            rep12 = 0


        elif LoopName == 'Estimulo_5':
            rep1 = 0
            rep2 = 0
            rep3 = 0
            rep4 = 0
            rep5 = 1
            rep6 = 0
            rep7 = 0
            rep8 = 0
            rep9 = 0
            rep10 = 0
            rep11 = 0
            rep12 = 0



        elif LoopName == 'Estimulo_6':
            rep1 = 0
            rep2 = 0
            rep3 = 0
            rep4 = 0
            rep5 = 0
            rep6 = 1
            rep7 = 0
            rep8 = 0
            rep9 = 0
            rep10 = 0
            rep11 = 0
            rep12 = 0


        elif LoopName == 'Estimulo_7':
            rep1 = 0
            rep2 = 0
            rep3 = 0
            rep4 = 0
            rep5 = 0
            rep6 = 0
            rep7 = 1
            rep8 = 0
            rep9 = 0
            rep10 = 0
            rep11 = 0
            rep12 = 0


        elif LoopName == 'Estimulo_8':
            rep1 = 0
            rep2 = 0
            rep3 = 0
            rep4 = 0
            rep5 = 0
            rep6 = 0
            rep7 = 0
            rep8 = 1
            rep9 = 0
            rep10 = 0
            rep11 = 0
            rep12 = 0


        elif LoopName == 'Estimulo_9':
            rep1 = 0
            rep2 = 0
            rep3 = 0
            rep4 = 0
            rep5 = 0
            rep6 = 0
            rep7 = 0
            rep8 = 0
            rep9 = 1
            rep10 = 0
            rep11 = 0
            rep12 = 0


        elif LoopName == 'Estimulo_10':
            rep1 = 0
            rep2 = 0
            rep3 = 0
            rep4 = 0
            rep5 = 0
            rep6 = 0
            rep7 = 0
            rep8 = 0
            rep9 = 0
            rep10 = 1
            rep11 = 0
            rep12 = 0



        elif LoopName == 'Estimulo_11':
            rep1 = 0
            rep2 = 0
            rep3 = 0
            rep4 = 0
            rep5 = 0
            rep6 = 0
            rep7 = 0
            rep8 = 0
            rep9 = 0
            rep10 = 0
            rep11 = 1
            rep12 = 0


        elif LoopName == 'Estimulo_12':
            rep1 = 0
            rep2 = 0
            rep3 = 0
            rep4 = 0
            rep5 = 0
            rep6 = 0
            rep7 = 0
            rep8 = 0
            rep9 = 0
            rep10 = 0
            rep11 = 0
            rep12 = 1
      End Experiment:
        print("End routine!")
        import csv

        # Obtendo o diretório do Desktop (para Windows)
        desktop = os.path.join(os.path.expanduser('~'), 'Desktop')

        # Caminho completo para salvar o arquivo CSV no Desktop
        caminho_arquivo = os.path.join(desktop, 'dados_exp.csv')

        # Abrindo o arquivo para escrita
        with open(nome_arquivo, mode='w', newline='') as arquivo_csv:
            escritor_csv = csv.writer(arquivo_csv)

            # Escrevendo as linhas da matriz no arquivo CSV
            escritor_csv.writerows(dados)

        print(f"Dados salvos em {nome_arquivo}")
        print("Experiment iniciado!")
      End Routine:
        print(dados)
  Routine FeedBack
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    KeyboardComponent key_resp
      allowedKeys = 'up','right'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine salvar
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    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        print(key_resp_2.keys)
        print(key_resp_3.keys)
        print(key_resp_4.keys)
        print(key_resp_5.keys)
        print(key_resp_6.keys)
        print(key_resp_7.keys)
Flow
  Routine salvar
  LoopInitiator MainLoop loopType="TrialHandler"
    conditionsFile = Estimulos.csv
    loopType = random
    nReps = 8
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    conditions:
      [OrderedDict([('LoopName', 'Estimulo_1')]),
      OrderedDict([('LoopName', 'Estimulo_2')]),
      OrderedDict([('LoopName', 'Estimulo_3')]),
      OrderedDict([('LoopName', 'Estimulo_4')]),
      OrderedDict([('LoopName', 'Estimulo_5')]),
      OrderedDict([('LoopName', 'Estimulo_6')]),
      OrderedDict([('LoopName', 'Estimulo_7')]),
      OrderedDict([('LoopName', 'Estimulo_8')]),
      OrderedDict([('LoopName', 'Estimulo_9')]),
      OrderedDict([('LoopName', 'Estimulo_10')]),
      OrderedDict([('LoopName', 'Estimulo_11')]),
      OrderedDict([('LoopName', 'Estimulo_12')])]
    Routine codigo
    LoopInitiator loop_1 loopType="TrialHandler"
      conditionsFile = Incrementos.xlsx
      loopType = sequential
      nReps = rep1
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      conditions:
        [{'px1': 4.4, 'px2': -4.4, 'px3': 4.4, 'px4': -4.4, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 4.3, 'px2': -4.3, 'px3': 4.3, 'px4': -4.3, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 4.2, 'px2': -4.2, 'px3': 4.2, 'px4': -4.2, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 4.1, 'px2': -4.1, 'px3': 4.1, 'px4': -4.1, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 4, 'px2': -4, 'px3': 4, 'px4': -4, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.9, 'px2': -3.9, 'px3': 3.9, 'px4': -3.9, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.8, 'px2': -3.8, 'px3': 3.8, 'px4': -3.8, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.7, 'px2': -3.7, 'px3': 3.7, 'px4': -3.7, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.6, 'px2': -3.6, 'px3': 3.6, 'px4': -3.6, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.5, 'px2': -3.5, 'px3': 3.5, 'px4': -3.5, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.39999999999999, 'px2': -3.39999999999999, 'px3': 3.39999999999999, 'px4': -3.39999999999999, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.29999999999999, 'px2': -3.29999999999999, 'px3': 3.29999999999999, 'px4': -3.29999999999999, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.19999999999999, 'px2': -3.19999999999999, 'px3': 3.19999999999999, 'px4': -3.19999999999999, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2}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
      Routine trial
      Routine trial_2
    LoopTerminator loop_1
    LoopInitiator loop_2 loopType="TrialHandler"
      conditionsFile = incremento_loop2.xlsx
      loopType = sequential
      nReps = rep2
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      conditions:
        [{'px1': 1.1, 'px2': -1.1, 'px3': 1.1, 'px4': -1.1, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 1.2, 'px2': -1.2, 'px3': 1.2, 'px4': -1.2, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 1.3, 'px2': -1.3, 'px3': 1.3, 'px4': -1.3, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 1.4, 'px2': -1.4, 'px3': 1.4, 'px4': -1.4, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 1.5, 'px2': -1.5, 'px3': 1.5, 'px4': -1.5, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 1.6, 'px2': -1.6, 'px3': 1.6, 'px4': -1.6, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 1.7, 'px2': -1.7, 'px3': 1.7, 'px4': -1.7, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 1.8, 'px2': -1.8, 'px3': 1.8, 'px4': -1.8, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 1.9, 'px2': -1.9, 'px3': 1.9, 'px4': -1.9, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 2, 'px2': -2, 'px3': 2, 'px4': -2, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 2.1, 'px2': -2.1, 'px3': 2.1, 'px4': -2.1, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 2.2, 'px2': -2.2, 'px3': 2.2, 'px4': -2.2, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 2.3, 'px2': -2.3, 'px3': 2.3, 'px4': -2.3, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 2.4, 'px2': -2.4, 'px3': 2.4, 'px4': -2.4, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 2.5, 'px2': -2.5, 'px3': 2.5, 'px4': -2.5, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2}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
      Routine trial
      Routine trial_2
    LoopTerminator loop_2
    LoopInitiator loop_3 loopType="TrialHandler"
      conditionsFile = incremento_loop3.xlsx
      loopType = sequential
      nReps = rep3
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      conditions:
        [{'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 4.4, 'py2': -4.4, 'py3': 4.4, 'py4': -4.4},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 4.3, 'py2': -4.3, 'py3': 4.3, 'py4': -4.3},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 4.2, 'py2': -4.2, 'py3': 4.2, 'py4': -4.2},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 4.1, 'py2': -4.1, 'py3': 4.1, 'py4': -4.1},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 4, 'py2': -4, 'py3': 4, 'py4': -4},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 3.9, 'py2': -3.9, 'py3': 3.9, 'py4': -3.9},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 3.8, 'py2': -3.8, 'py3': 3.8, 'py4': -3.8},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 3.7, 'py2': -3.7, 'py3': 3.7, 'py4': -3.7},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 3.6, 'py2': -3.6, 'py3': 3.6, 'py4': -3.6},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 3.5, 'py2': -3.5, 'py3': 3.5, 'py4': -3.5},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 3.39999999999999, 'py2': -3.39999999999999, 'py3': 3.39999999999999, 'py4': -3.39999999999999},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 3.29999999999999, 'py2': -3.29999999999999, 'py3': 3.29999999999999, 'py4': -3.29999999999999},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 3.19999999999999, 'py2': -3.19999999999999, 'py3': 3.19999999999999, 'py4': -3.19999999999999}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
      Routine trial
      Routine trial_2
    LoopTerminator loop_3
    LoopInitiator loop_4 loopType="TrialHandler"
      conditionsFile = Incrementos_loop_4.xlsx
      loopType = sequential
      nReps = rep4
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      conditions:
        [{'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 1.09999999999998, 'py2': -1.09999999999998, 'py3': 1.09999999999998, 'py4': -1.09999999999998},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 1.19999999999998, 'py2': -1.19999999999998, 'py3': 1.19999999999998, 'py4': -1.19999999999998},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 1.29999999999998, 'py2': -1.29999999999998, 'py3': 1.29999999999998, 'py4': -1.29999999999998},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 1.39999999999998, 'py2': -1.39999999999998, 'py3': 1.39999999999998, 'py4': -1.39999999999998},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 1.49999999999998, 'py2': -1.49999999999998, 'py3': 1.49999999999998, 'py4': -1.49999999999998},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 1.59999999999998, 'py2': -1.59999999999998, 'py3': 1.59999999999998, 'py4': -1.59999999999998},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 1.69999999999998, 'py2': -1.69999999999998, 'py3': 1.69999999999998, 'py4': -1.69999999999998},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 1.79999999999998, 'py2': -1.79999999999998, 'py3': 1.79999999999998, 'py4': -1.79999999999998},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 1.89999999999998, 'py2': -1.89999999999998, 'py3': 1.89999999999998, 'py4': -1.89999999999998}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
      Routine trial
      Routine trial_2
    LoopTerminator loop_4
    LoopInitiator loop_5 loopType="TrialHandler"
      conditionsFile = Incrementos.xlsx
      loopType = sequential
      nReps = rep5
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      conditions:
        [{'px1': 4.4, 'px2': -4.4, 'px3': 4.4, 'px4': -4.4, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 4.3, 'px2': -4.3, 'px3': 4.3, 'px4': -4.3, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 4.2, 'px2': -4.2, 'px3': 4.2, 'px4': -4.2, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 4.1, 'px2': -4.1, 'px3': 4.1, 'px4': -4.1, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 4, 'px2': -4, 'px3': 4, 'px4': -4, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.9, 'px2': -3.9, 'px3': 3.9, 'px4': -3.9, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.8, 'px2': -3.8, 'px3': 3.8, 'px4': -3.8, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.7, 'px2': -3.7, 'px3': 3.7, 'px4': -3.7, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.6, 'px2': -3.6, 'px3': 3.6, 'px4': -3.6, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.5, 'px2': -3.5, 'px3': 3.5, 'px4': -3.5, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.39999999999999, 'px2': -3.39999999999999, 'px3': 3.39999999999999, 'px4': -3.39999999999999, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.29999999999999, 'px2': -3.29999999999999, 'px3': 3.29999999999999, 'px4': -3.29999999999999, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.19999999999999, 'px2': -3.19999999999999, 'px3': 3.19999999999999, 'px4': -3.19999999999999, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2}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
      Routine trial_3
      Routine trial_4
    LoopTerminator loop_5
    LoopInitiator loop_6 loopType="TrialHandler"
      conditionsFile = incremento_loop2.xlsx
      loopType = sequential
      nReps = rep6
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      conditions:
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      Routine trial_3
      Routine trial_4
    LoopTerminator loop_6
    LoopInitiator loop_7 loopType="TrialHandler"
      conditionsFile = incremento_loop3.xlsx
      loopType = sequential
      nReps = rep7
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      conditions:
        [{'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 4.4, 'py2': -4.4, 'py3': 4.4, 'py4': -4.4},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 4.3, 'py2': -4.3, 'py3': 4.3, 'py4': -4.3},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 4.2, 'py2': -4.2, 'py3': 4.2, 'py4': -4.2},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 4.1, 'py2': -4.1, 'py3': 4.1, 'py4': -4.1},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 4, 'py2': -4, 'py3': 4, 'py4': -4},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 3.9, 'py2': -3.9, 'py3': 3.9, 'py4': -3.9},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 3.8, 'py2': -3.8, 'py3': 3.8, 'py4': -3.8},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 3.7, 'py2': -3.7, 'py3': 3.7, 'py4': -3.7},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 3.6, 'py2': -3.6, 'py3': 3.6, 'py4': -3.6},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 3.5, 'py2': -3.5, 'py3': 3.5, 'py4': -3.5},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 3.39999999999999, 'py2': -3.39999999999999, 'py3': 3.39999999999999, 'py4': -3.39999999999999},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 3.29999999999999, 'py2': -3.29999999999999, 'py3': 3.29999999999999, 'py4': -3.29999999999999},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 3.19999999999999, 'py2': -3.19999999999999, 'py3': 3.19999999999999, 'py4': -3.19999999999999}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
      Routine trial_3
      Routine trial_4
    LoopTerminator loop_7
    LoopInitiator loop_8 loopType="TrialHandler"
      conditionsFile = Incrementos_loop_4.xlsx
      loopType = sequential
      nReps = rep8
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      conditions:
        [{'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 1.09999999999998, 'py2': -1.09999999999998, 'py3': 1.09999999999998, 'py4': -1.09999999999998},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 1.19999999999998, 'py2': -1.19999999999998, 'py3': 1.19999999999998, 'py4': -1.19999999999998},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 1.29999999999998, 'py2': -1.29999999999998, 'py3': 1.29999999999998, 'py4': -1.29999999999998},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 1.39999999999998, 'py2': -1.39999999999998, 'py3': 1.39999999999998, 'py4': -1.39999999999998},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 1.49999999999998, 'py2': -1.49999999999998, 'py3': 1.49999999999998, 'py4': -1.49999999999998},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 1.59999999999998, 'py2': -1.59999999999998, 'py3': 1.59999999999998, 'py4': -1.59999999999998},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 1.69999999999998, 'py2': -1.69999999999998, 'py3': 1.69999999999998, 'py4': -1.69999999999998},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 1.79999999999998, 'py2': -1.79999999999998, 'py3': 1.79999999999998, 'py4': -1.79999999999998},
        {'px1': 2.2, 'px2': -2.2, 'px3': -2.2, 'px4': 2.2, 'py1': 1.89999999999998, 'py2': -1.89999999999998, 'py3': 1.89999999999998, 'py4': -1.89999999999998}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
      Routine trial_3
      Routine trial_4
    LoopTerminator loop_8
    LoopInitiator loop_9 loopType="TrialHandler"
      conditionsFile = Incrementos.xlsx
      loopType = sequential
      nReps = rep9
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      conditions:
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      Routine trial_5
      Routine trial_6
    LoopTerminator loop_9
    LoopInitiator loop_10 loopType="TrialHandler"
      conditionsFile = incremento_loop2.xlsx
      loopType = sequential
      nReps = rep10
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      conditions:
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      Routine trial_5
      Routine trial_6
    LoopTerminator loop_10
    LoopInitiator loop_11 loopType="TrialHandler"
      conditionsFile = incremento_loop3.xlsx
      loopType = sequential
      nReps = rep11
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      conditions:
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      Routine trial_5
      Routine trial_6
    LoopTerminator loop_11
    LoopInitiator loop_12 loopType="TrialHandler"
      conditionsFile = Incrementos_loop_4.xlsx
      loopType = sequential
      nReps = rep12
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      conditions:
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      Routine trial_5
      Routine trial_6
    LoopTerminator loop_12
    Routine _intertrial_interval_
  LoopTerminator MainLoop
